PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = n-back-testing
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Routines
  Routine trial1
    ImageComponent gridLines1
      image = grid.png
      size = [0.6, 0.6]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent tarSquare1
      fillColor = $[1,1,1]
      pos [set every repeat] = [loc1T1,loc2T1]
      shape = rectangle
      size = [0.15,0.15]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent fixTrial1
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = +
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    KeyboardComponent keyRespTrial1
      allowedKeys = 'space'
      correctAns = $corrAnsT1
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine end
    TextComponent thanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        This is the end of the experiment.
        Thank you for your time.
  Routine instructions2
    TextComponent instr2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = This is the end of N-back-1 trials. You are about to start N-back-2 trials. This means that instead of pressing space whenever the square appears in the same position as on the position on one trial before, you are required to press space whenever the square appears in the same position as on the position two trials before. For example if the square appeared in left down corner on trial 1, you should press space if the square appears in the left down corner on trial 3. Press space to continue.
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    KeyboardComponent keyResp2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation2
    TextComponent fix2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine trial2
    ImageComponent gridLines2
      image = grid.png
      size = [0.6, 0.6]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    PolygonComponent tarSquare2
      fillColor = $[1,1,1]
      pos [set every repeat] = [loc1T2,loc2T2]
      shape = rectangle
      size = [0.15,0.15]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent fixTrial2
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = +
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    KeyboardComponent keyRespTrial2
      allowedKeys = 'space'
      correctAns = $corrAnsT2
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      storeCorrect = True
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  Routine instructions1
    TextComponent instr1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = In this task you will be required to press space if the white square appeared in the same location as the location on the last trial. For example if the square was in the left down corner on trial 1 and then it appeared in the same location on trial 2, press space. Otherwise, do not respond. Press space to continue.
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    KeyboardComponent keyResp1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation1
    TextComponent fix1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine instructions3
    TextComponent instr3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = This is the end of N-back-2 trials. You are about to start N-back-3 trials. This means that instead of pressing space whenever the square appears in the same position as on the position on one trial before, you are required to press space whenever the square appears in the same position as on the position three trials before. For example if the square appeared in left down corner on trial 1, you should press space if the square appears in the left down corner on trial 4. Press space to continue.
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    KeyboardComponent keyResp3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial3
    ImageComponent gridLines3
      image = grid.png
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    PolygonComponent tarSquare3
      fillColor = $[1,1,1]
      pos [set every repeat] = [loc1T3,loc2T3]
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent fixTrial3
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = +
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    KeyboardComponent keyRespTrial3
      allowedKeys = 'space'
      correctAns = $corrAnsT3
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      storeCorrect = True
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  Routine fixation3
    TextComponent fix3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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Flow
  Routine instructions1
  Routine fixation1
  LoopInitiator trials1 loopType="TrialHandler"
    conditionsFile = nBackCond1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('squareT1', 6), ('loc1T1', 0.2), ('loc2T1', 0.0), ('corrAnsT1', None)]),
      OrderedDict([('squareT1', 6), ('loc1T1', 0.2), ('loc2T1', 0.0), ('corrAnsT1', 'space')]),
      OrderedDict([('squareT1', 2), ('loc1T1', 0.0), ('loc2T1', 0.2), ('corrAnsT1', None)]),
      OrderedDict([('squareT1', 9), ('loc1T1', 0.2), ('loc2T1', -0.2), ('corrAnsT1', None)]),
      OrderedDict([('squareT1', 9), ('loc1T1', 0.2), ('loc2T1', -0.2), ('corrAnsT1', 'space')]),
      OrderedDict([('squareT1', 6), ('loc1T1', 0.2), ('loc2T1', 0.0), ('corrAnsT1', None)]),
      OrderedDict([('squareT1', 4), ('loc1T1', -0.2), ('loc2T1', 0.0), ('corrAnsT1', None)]),
      OrderedDict([('squareT1', 3), ('loc1T1', 0.2), ('loc2T1', 0.2), ('corrAnsT1', None)]),
      OrderedDict([('squareT1', 3), ('loc1T1', 0.2), ('loc2T1', 0.2), ('corrAnsT1', 'space')]),
      OrderedDict([('squareT1', 8), ('loc1T1', 0.0), ('loc2T1', -0.2), ('corrAnsT1', None)]),
      OrderedDict([('squareT1', 1), ('loc1T1', -0.2), ('loc2T1', 0.2), ('corrAnsT1', None)]),
      OrderedDict([('squareT1', 2), ('loc1T1', 0.0), ('loc2T1', 0.2), ('corrAnsT1', None)]),
      OrderedDict([('squareT1', 4), ('loc1T1', -0.2), ('loc2T1', 0.0), ('corrAnsT1', None)]),
      OrderedDict([('squareT1', 4), ('loc1T1', -0.2), ('loc2T1', 0.0), ('corrAnsT1', 'space')]),
      OrderedDict([('squareT1', 8), ('loc1T1', 0.0), ('loc2T1', -0.2), ('corrAnsT1', None)]),
      OrderedDict([('squareT1', 5), ('loc1T1', 0.0), ('loc2T1', 0.0), ('corrAnsT1', None)]),
      OrderedDict([('squareT1', 5), ('loc1T1', 0.0), ('loc2T1', 0.0), ('corrAnsT1', 'space')])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
    Routine trial1
  LoopTerminator trials1
  Routine instructions2
  Routine fixation2
  LoopInitiator trials2 loopType="TrialHandler"
    conditionsFile = nBackCond2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('squareT2', 5), ('loc1T2', 0.0), ('loc2T2', 0.0), ('corrAnsT2', None)]),
      OrderedDict([('squareT2', 2), ('loc1T2', 0.0), ('loc2T2', 0.2), ('corrAnsT2', None)]),
      OrderedDict([('squareT2', 6), ('loc1T2', 0.2), ('loc2T2', 0.0), ('corrAnsT2', None)]),
      OrderedDict([('squareT2', 9), ('loc1T2', 0.2), ('loc2T2', -0.2), ('corrAnsT2', None)]),
      OrderedDict([('squareT2', 3), ('loc1T2', 0.2), ('loc2T2', 0.2), ('corrAnsT2', None)]),
      OrderedDict([('squareT2', 9), ('loc1T2', 0.2), ('loc2T2', -0.2), ('corrAnsT2', 'space')]),
      OrderedDict([('squareT2', 7), ('loc1T2', -0.2), ('loc2T2', -0.2), ('corrAnsT2', None)]),
      OrderedDict([('squareT2', 1), ('loc1T2', -0.2), ('loc2T2', 0.2), ('corrAnsT2', None)]),
      OrderedDict([('squareT2', 5), ('loc1T2', 0.0), ('loc2T2', 0.0), ('corrAnsT2', None)]),
      OrderedDict([('squareT2', 7), ('loc1T2', -0.2), ('loc2T2', -0.2), ('corrAnsT2', None)]),
      OrderedDict([('squareT2', 5), ('loc1T2', 0.0), ('loc2T2', 0.0), ('corrAnsT2', 'space')]),
      OrderedDict([('squareT2', 6), ('loc1T2', 0.2), ('loc2T2', 0.0), ('corrAnsT2', None)]),
      OrderedDict([('squareT2', 3), ('loc1T2', 0.2), ('loc2T2', 0.2), ('corrAnsT2', None)]),
      OrderedDict([('squareT2', 6), ('loc1T2', 0.2), ('loc2T2', 0.0), ('corrAnsT2', 'space')]),
      OrderedDict([('squareT2', 8), ('loc1T2', 0.0), ('loc2T2', -0.2), ('corrAnsT2', None)]),
      OrderedDict([('squareT2', 9), ('loc1T2', 0.2), ('loc2T2', -0.2), ('corrAnsT2', None)]),
      OrderedDict([('squareT2', 9), ('loc1T2', 0.2), ('loc2T2', -0.2), ('corrAnsT2', None)])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
    Routine trial2
  LoopTerminator trials2
  Routine instructions3
  Routine fixation3
  LoopInitiator trials3 loopType="TrialHandler"
    conditionsFile = nBackCond3.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('squareT3', 5), ('loc1T3', 0.0), ('loc2T3', 0.0), ('corrAnsT3', None)]),
      OrderedDict([('squareT3', 2), ('loc1T3', 0.0), ('loc2T3', 0.2), ('corrAnsT3', None)]),
      OrderedDict([('squareT3', 9), ('loc1T3', -0.2), ('loc2T3', -0.2), ('corrAnsT3', None)]),
      OrderedDict([('squareT3', 5), ('loc1T3', 0.0), ('loc2T3', -0.2), ('corrAnsT3', 'space')]),
      OrderedDict([('squareT3', 3), ('loc1T3', 0.2), ('loc2T3', 0.2), ('corrAnsT3', None)]),
      OrderedDict([('squareT3', 9), ('loc1T3', 0.2), ('loc2T3', -0.2), ('corrAnsT3', 'space')]),
      OrderedDict([('squareT3', 7), ('loc1T3', -0.2), ('loc2T3', -0.2), ('corrAnsT3', None)]),
      OrderedDict([('squareT3', 1), ('loc1T3', -0.2), ('loc2T3', 0.2), ('corrAnsT3', None)]),
      OrderedDict([('squareT3', 6), ('loc1T3', 0.2), ('loc2T3', 0.0), ('corrAnsT3', None)]),
      OrderedDict([('squareT3', 7), ('loc1T3', -0.2), ('loc2T3', -0.2), ('corrAnsT3', 'space')]),
      OrderedDict([('squareT3', 5), ('loc1T3', 0.0), ('loc2T3', 0.0), ('corrAnsT3', None)]),
      OrderedDict([('squareT3', 6), ('loc1T3', 0.2), ('loc2T3', 0.0), ('corrAnsT3', 'space')]),
      OrderedDict([('squareT3', 3), ('loc1T3', 0.2), ('loc2T3', 0.2), ('corrAnsT3', None)]),
      OrderedDict([('squareT3', 1), ('loc1T3', -0.2), ('loc2T3', 0.2), ('corrAnsT3', None)]),
      OrderedDict([('squareT3', 8), ('loc1T3', 0.0), ('loc2T3', -0.2), ('corrAnsT3', None)]),
      OrderedDict([('squareT3', 9), ('loc1T3', 0.2), ('loc2T3', -0.2), ('corrAnsT3', None)]),
      OrderedDict([('squareT3', 1), ('loc1T3', -0.2), ('loc2T3', 0.2), ('corrAnsT3', 'space')])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
    Routine trial3
  LoopTerminator trials3
  Routine end
